PsychoPy2experiment version="2022.2.5"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [736, 664]
  expName = ASSR2
  keyboardBackend = ioHub
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Routines
  Routine Intro
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome to the experiment.
        Participant: Sit upright, try to relax, and please avoid during data collection:
        - unnecessary movements
        - talking

        Tester:
        - set volume to 30
        - do impedance and railing checks
        - on labrecorder set: study root, block/task, run, participant, session
        - gather both streams and start labrecorder recording
        - this version of the test measures at: F8, F7 (original paper), T3, T4 (closeness to headset measurement locations), T6, T5 (many papers point to temporal / parietal regions), C3, C4 (closest location to primary auditory cortex, which is said to be the source of assr)  Reference at: Fz, Ground at: Oz
        press space to continue
    CodeComponent code
      Code Type = Auto->JS
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      Before Experiment:
        from pylsl import StreamInfo, StreamOutlet
        import time
      Begin Experiment:
        #event ids
        startRest = 0
        endRest = 1
        startASSR = 2
        endASSR = 3
        artifact = 4

        info = StreamInfo(name='LSL_Markers', type='Markers', channel_count=1,
                          channel_format='int32', source_id='Psychopy Markers')
        # Initialize the stream.
        outlet = StreamOutlet(info)
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine ASSR
    SoundComponent ModulatedTone
      sound = C:/Users/elpid/Downloads/oddball-task-master/amplitude_modulated_noise.wav
      startVal [time (s)] = 2.5
      stopVal [duration (s)] = 10
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    PolygonComponent Cross
      fillColor = white
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 12.5
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    CodeComponent code_2
      Code Type = Py
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      Begin Routine:
        flag_rest_start = True
        flag_rest_end = True
        flag_ASSR_start = True
        flag_ASSR_end = True
      Each Frame:
        if ModulatedTone.status == STARTED and flag_ASSR_start == True:
            print('ASSR start')
            flag_ASSR_start = False
            outlet.push_sample(x=[startASSR])

        if ModulatedTone.status == FINISHED and flag_ASSR_end == True:
            print('ASSR end')
            flag_ASSR_end = False
            outlet.push_sample(x=[endASSR])

        if text_3.status == STARTED and flag_rest_start == True:
            print('Rest start')
            flag_rest_start = False
            outlet.push_sample(x=[startRest])

        if text_3.status == FINISHED and flag_rest_end == True:
            print('Rest end')
            flag_rest_end = False
            outlet.push_sample(x=[endRest])

            print('****')
    TextComponent text_3
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2.5
      text = Rest
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  Routine Outro
    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1000.0
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      text:
        This section is over. Todo:

        - upload collected data to drive
        - upload device config file to drive
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Impedance_check
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        20 more trials are done.
        Check and note impedances.
Flow
  Routine Intro
  LoopInitiator trials loopType="TrialHandler"
    loopType = sequential
    nReps = 4
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    LoopInitiator trials_2 loopType="TrialHandler"
      loopType = random
      nReps = 10
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      Routine ASSR
    LoopTerminator trials_2
    Routine Impedance_check
  LoopTerminator trials
  Routine Outro
