PsychoPy2experiment version="2022.2.5"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 2
  Units = height
  Window size (pixels) = [936, 864]
  expName = ASSR3
  keyboardBackend = ioHub
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Routines
  Routine Intro
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome to the experiment.
        Participant: Relax, you dont need to look at the screen.
        - unnecessary movements
        - talking

        Tester:
        - set gain to 24x
        - set volume to 65
        - on labrecorder set: study root, task, participant name, session, run, device, electrode layout, psychopy experiment version
        - initial impedance test
        press space to continue
    CodeComponent code
      Code Type = Auto->JS
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      Before Experiment:
        from pylsl import StreamInfo, StreamOutlet
        from psychopy import event
        import time
      Begin Experiment:
        #event ids
        startRest = 1
        startASSR = 2
        artifact = 3

        info = StreamInfo(name='LSL_Markers', type='Markers', channel_count=1,
                          channel_format='int32', source_id='Psychopy Markers')
        # Initialize the stream.
        outlet = StreamOutlet(info)
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Outro
    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1000.0
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      text:
        This section is over. Todo:
        -check final impedance
        - upload collected data to drive
        - upload device config file to drive
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Break
    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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      text:
        Close Eyes when you dont hear the sound.
        Open when you do.

        5 second break
  Routine ASSRMid
    SoundComponent ModulatedTone
      sound = 1kHzAmplitudeModulated40Hz.wav
      startVal [time (s)] = 30
      stopVal [duration (s)] = 30
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    CodeComponent code_2
      Code Type = Py
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      Begin Routine:
        print('start')
        flag_start = True
        outlet.push_sample(x=[startRest])
      Each Frame:
        if ModulatedTone.status == STARTED and flag_start == True:
            print('start')
            flag_start = False
            outlet.push_sample(x=[startASSR])

        keys = event.getKeys()
        if 'a' in keys:  # Change 'space' to the actual button you want to use
            outlet.push_sample(x=[artifact])  # Push the sample to the LSL stream
            print('artifact')
    TextComponent CloseEyes
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (s)] = 30
      text = ---- Close your eyes ----
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    TextComponent OpenEyes
      letterHeight = 0.05
      startVal [time (s)] = 30
      stopVal [duration (s)] = 30
      text = Open your eyes when you hear the sound
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  Routine ASSRMid_2
    SoundComponent ModulatedTone_2
      sound = 1kHzAmplitudeModulated40Hz.wav
      startVal [time (s)] = 30
      stopVal [duration (s)] = 30
      volume = 0.8
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    PolygonComponent Cross_2
      fillColor = white
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 60
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    CodeComponent code_3
      Code Type = Py
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      Begin Routine:
        print('start')
        flag_start = True
        outlet.push_sample(x=[startRest])
      Each Frame:
        if ModulatedTone.status == STARTED and flag_start == True:
            print('start')
            flag_start = False
            outlet.push_sample(x=[startASSR])

        keys = event.getKeys()
        if 'a' in keys:  # Change 'space' to the actual button you want to use
            outlet.push_sample(x=[artifact])  # Push the sample to the LSL stream
            print('artifact')
    TextComponent CloseEyes_2
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (s)] = 30
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      text:
        -
        Close Eyes when you dont hear the sound.
        Open when you do.
        -
  Routine ASSRMid_3
    SoundComponent ModulatedTone_3
      sound = 1kHzAmplitudeModulated40Hz.wav
      startVal [time (s)] = 30
      stopVal [duration (s)] = 30
      volume = 0.6
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    PolygonComponent Cross_3
      fillColor = white
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 60
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    CodeComponent code_4
      Code Type = Py
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      Begin Routine:
        print('start')
        flag_start = True
        outlet.push_sample(x=[startRest])
      Each Frame:
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    TextComponent CloseEyes_3
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (s)] = 30
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      text:
        !!Experiment is on!!
Flow
  Routine Intro
  Routine Break
  LoopInitiator trials_2 loopType="TrialHandler"
    loopType = sequential
    nReps = 10
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    Routine ASSRMid
  LoopTerminator trials_2
  Routine Outro
