PsychoPy2experiment version="2022.2.5"
Settings
  Audio lib = sounddevice
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [920, 780]
  expName = Oddball_task
  keyboardBackend = ioHub
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Routines
  Routine Instructions
    TextComponent instructions
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        In this task keep your eyes open when you see "open" 30s
        then close your eyes if you see "----close eyes-----" 30s
        open again when you hear a short tone, and we repeat this.
         Press 'space' to continue. Press 'esc' to exit the experiment.
    KeyboardComponent key_resp_1
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Py
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      Before Experiment:
        from pylsl import StreamInfo, StreamOutlet
        import time
      Begin Experiment:
        #event ids
        start = 1

        info = StreamInfo(name='LSL_Markers', type='Markers', channel_count=1,
                          channel_format='int32', source_id='Psychopy Markers')
        # Initialize the stream.
        outlet = StreamOutlet(info)
  Routine Trial
    TextComponent fixation
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (s)] = 60
      text = open
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        outlet.push_sample(x=[start])
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 60
      stopVal [duration (s)] = 60
      text = -----------------Eyes closed----------------
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    SoundComponent sound_1
      sound = A
      startVal [time (s)] = 120
      stopVal [duration (s)] = 1.0
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  Routine End
    TextComponent thank_you
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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      text:
        This is the end of the experiment.

        Thank you for your time.
    KeyboardComponent exit_exp
      allowedKeys = 'e'
      forceEndRoutine = True
      startVal [time (s)] = 3
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Flow
  Routine Instructions
  LoopInitiator trials_2 loopType="TrialHandler"
    loopType = sequential
    nReps = 5
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    Routine Trial
  LoopTerminator trials_2
  Routine End
