PsychoPy2experiment version="2022.2.5"
Settings
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 2
  Units = height
  Window size (pixels) = [1920, 1200]
  expName = game
  keyboardBackend = ioHub
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Routines
  Routine Starter
    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Self evaluation:
        - Stanford sleepiness scale
        - VAS-F
        - Fatigue Assessment Inventory
        to start, press space
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_2
      Code Type = Auto->JS
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      Before Experiment:
        from pylsl import StreamInfo, StreamOutlet
        from psychopy import event
        import time

        BASELINELENGTH = 30
        PVTSECTIONLENGTH = 150
        MATHSECTIONLENGTH = 150
        TETRISSECITONLEENGTH = 300
        TETRISREPETITION = 3
        SNAKESECITONLEENGTH = 300
        SNAKEREPETITION = 3
      Begin Experiment:
        #event ids
        startBaseline = 1
        startPvt = 2
        pvtItemAppears = 3
        startMaths = 4
        correctAnswer = 5
        inCorrectAnswer = 6
        startTetris = 7
        tetrisFail = 8
        levelGainTetris = 9
        pauseTetris = 10
        startSnake = 11
        snakeFail = 12
        snakeLvlUp = 13
        pauseSnake = 14

        minuteOrSecond = 1 #1: test. 60: measurement. multiplies experiment durations (seconds).

        info = StreamInfo(name='LSL_Markers', type='Markers', channel_count=1,
                          channel_format='int32', source_id='Psychopy Markers')
        # Initialize the stream.
        outlet = StreamOutlet(info)
  Routine Ender
    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Done
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  Routine ppgTest
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = ppg test here
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  Routine Baseline
    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $BASELINELENGTH
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      text:
        $"collect baseline for: " + str(BASELINELENGTH) + "seconds"
    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        print('startBaseline')
        outlet.push_sample(x=[startBaseline])
  Routine pvtTest
  Routine QuickEvaluation
  Routine Tetris
    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        """
        Tetronimo (a Tetris clone)

        original author: Al Sweigart (al@inventwithpython.com)
        {Making Games with Python and Pygame (2012)}
        http://inventwithpython.com/pygame
        Released under a "Simplified BSD" license



        Created on Thu Nov 30 10:29:55 2023
        @author: elpid
        """
        print('startTetris')
        outlet.push_sample(x=[startTetris])

        repetitions = TETRISREPETITION
        timesUntilBreak = TETRISSECITONLEENGTH  * minuteOrSecond
        tetrisFailCount = 0


        import random, time, pygame, sys
        from pygame.locals import *

        FPS = 25
        WINDOWWIDTH = 640
        WINDOWHEIGHT = 480
        BOXSIZE = 20
        BOARDWIDTH = 10
        BOARDHEIGHT = 20
        BLANK = '.'

        MOVESIDEWAYSFREQ = 0.15
        MOVEDOWNFREQ = 0.1

        XMARGIN = int((WINDOWWIDTH - BOARDWIDTH * BOXSIZE) / 2)
        TOPMARGIN = WINDOWHEIGHT - (BOARDHEIGHT * BOXSIZE) - 5

        #               R    G    B
        WHITE       = (255, 255, 255)
        GRAY        = (185, 185, 185)
        BLACK       = (  0,   0,   0)
        RED         = (155,   0,   0)
        LIGHTRED    = (175,  20,  20)
        GREEN       = (  0, 155,   0)
        LIGHTGREEN  = ( 20, 175,  20)
        BLUE        = (  0,   0, 155)
        LIGHTBLUE   = ( 20,  20, 175)
        YELLOW      = (155, 155,   0)
        LIGHTYELLOW = (175, 175,  20)

        BORDERCOLOR = BLUE
        BGCOLOR = BLACK
        TEXTCOLOR = WHITE
        TEXTSHADOWCOLOR = GRAY
        COLORS      = (     BLUE,      GREEN,      RED,      YELLOW)
        LIGHTCOLORS = (LIGHTBLUE, LIGHTGREEN, LIGHTRED, LIGHTYELLOW)
        assert len(COLORS) == len(LIGHTCOLORS) # each color must have light color

        TEMPLATEWIDTH = 5
        TEMPLATEHEIGHT = 5

        S_SHAPE_TEMPLATE = [['.....',
                             '.....',
                             '..OO.',
                             '.OO..',
                             '.....'],
                            ['.....',
                             '..O..',
                             '..OO.',
                             '...O.',
                             '.....']]

        Z_SHAPE_TEMPLATE = [['.....',
                             '.....',
                             '.OO..',
                             '..OO.',
                             '.....'],
                            ['.....',
                             '..O..',
                             '.OO..',
                             '.O...',
                             '.....']]

        I_SHAPE_TEMPLATE = [['..O..',
                             '..O..',
                             '..O..',
                             '..O..',
                             '.....'],
                            ['.....',
                             '.....',
                             'OOOO.',
                             '.....',
                             '.....']]

        O_SHAPE_TEMPLATE = [['.....',
                             '.....',
                             '.OO..',
                             '.OO..',
                             '.....']]

        J_SHAPE_TEMPLATE = [['.....',
                             '.O...',
                             '.OOO.',
                             '.....',
                             '.....'],
                            ['.....',
                             '..OO.',
                             '..O..',
                             '..O..',
                             '.....'],
                            ['.....',
                             '.....',
                             '.OOO.',
                             '...O.',
                             '.....'],
                            ['.....',
                             '..O..',
                             '..O..',
                             '.OO..',
                             '.....']]

        L_SHAPE_TEMPLATE = [['.....',
                             '...O.',
                             '.OOO.',
                             '.....',
                             '.....'],
                            ['.....',
                             '..O..',
                             '..O..',
                             '..OO.',
                             '.....'],
                            ['.....',
                             '.....',
                             '.OOO.',
                             '.O...',
                             '.....'],
                            ['.....',
                             '.OO..',
                             '..O..',
                             '..O..',
                             '.....']]

        T_SHAPE_TEMPLATE = [['.....',
                             '..O..',
                             '.OOO.',
                             '.....',
                             '.....'],
                            ['.....',
                             '..O..',
                             '..OO.',
                             '..O..',
                             '.....'],
                            ['.....',
                             '.....',
                             '.OOO.',
                             '..O..',
                             '.....'],
                            ['.....',
                             '..O..',
                             '.OO..',
                             '..O..',
                             '.....']]

        PIECES = {'S': S_SHAPE_TEMPLATE,
                  'Z': Z_SHAPE_TEMPLATE,
                  'J': J_SHAPE_TEMPLATE,
                  'L': L_SHAPE_TEMPLATE,
                  'I': I_SHAPE_TEMPLATE,
                  'O': O_SHAPE_TEMPLATE,
                  'T': T_SHAPE_TEMPLATE}


        def main():
            global FPSCLOCK, DISPLAYSURF, BASICFONT, BIGFONT
            pygame.init()
            FPSCLOCK = pygame.time.Clock()
            DISPLAYSURF = pygame.display.set_mode((WINDOWWIDTH, WINDOWHEIGHT))
            BASICFONT = pygame.font.Font('freesansbold.ttf', 18)
            BIGFONT = pygame.font.Font('freesansbold.ttf', 100)
            pygame.display.set_caption('Tetromino')

            showTextScreen('Tetromino')
            runGame()
            showTextScreen('Done')
            return
            #while True: # game loop
                #if random.randint(0, 1) == 0:
                #    pygame.mixer.music.load('tetrisb.mid')
                #else:
                #    pygame.mixer.music.load('tetrisc.mid')
                #pygame.mixer.music.play(-1, 0.0)
                #pygame.quit()
                #pygame.mixer.music.stop()
                #showTextScreen('Done')
                #return


        def runGame():
            # setup variables for the start of the game
            board = getBlankBoard()
            lastMoveDownTime = time.time()
            lastMoveSidewaysTime = time.time()
            lastFallTime = time.time()
            movingDown = False # note: there is no movingUp variable
            movingLeft = False
            movingRight = False
            score = 0
            level, fallFreq = calculateLevelAndFallFreq(score)
            counter = 0
            breakTime = time.time()

            fallingPiece = getNewPiece()
            nextPiece = getNewPiece()

            while True: # game loop

                nowTime = time.time()

                if counter == repetitions:
                    return

                if nowTime > breakTime + timesUntilBreak:
                    # Pausing the game
                    DISPLAYSURF.fill(BGCOLOR)
                    pygame.mixer.music.stop()
                    print('pauseTetris')
                    outlet.push_sample(x=[pauseTetris])
                    showTextScreen('Paused') # pause until a key press
                    print('startTetris')
                    outlet.push_sample(x=[startTetris])
                    #pygame.mixer.music.play(-1, 0.0) # we dont have music thankfully
                    lastFallTime = time.time()
                    lastMoveDownTime = time.time()
                    lastMoveSidewaysTime = time.time()
                    # reset breaktimer
                    breakTime = time.time()
                    counter = counter + 1



                if fallingPiece == None:
                    # No falling piece in play, so start a new piece at the top
                    fallingPiece = nextPiece
                    nextPiece = getNewPiece()
                    lastFallTime = time.time() # reset lastFallTime

                    if not isValidPosition(board, fallingPiece):
                        board = getBlankBoard() # return for original functionlity: end game on fail. Here though we clear the board and decrease the score by 20 which decreases the level by 2.
                        outlet.push_sample(x=[tetrisFail])
                        print('tetrisFail')
                        #return # can't fit a new piece on the board, so game over

                checkForQuit()
                for event in pygame.event.get(): # event handling loop
                    if event.type == KEYUP:
                        if (event.key == K_p):
                            # Pausing the game
                            DISPLAYSURF.fill(BGCOLOR)
                            pygame.mixer.music.stop()
                            showTextScreen('Paused') # pause until a key press
                            #pygame.mixer.music.play(-1, 0.0)
                            lastFallTime = time.time()
                            lastMoveDownTime = time.time()
                            lastMoveSidewaysTime = time.time()
                        elif (event.key == K_LEFT or event.key == K_a):
                            movingLeft = False
                        elif (event.key == K_RIGHT or event.key == K_d):
                            movingRight = False
                        elif (event.key == K_DOWN or event.key == K_s):
                            movingDown = False

                    elif event.type == KEYDOWN:
                        # moving the piece sideways
                        if (event.key == K_LEFT or event.key == K_a) and isValidPosition(board, fallingPiece, adjX=-1):
                            fallingPiece['x'] -= 1
                            movingLeft = True
                            movingRight = False
                            lastMoveSidewaysTime = time.time()

                        elif (event.key == K_RIGHT or event.key == K_d) and isValidPosition(board, fallingPiece, adjX=1):
                            fallingPiece['x'] += 1
                            movingRight = True
                            movingLeft = False
                            lastMoveSidewaysTime = time.time()

                        # rotating the piece (if there is room to rotate)
                        elif (event.key == K_UP or event.key == K_w):
                            fallingPiece['rotation'] = (fallingPiece['rotation'] + 1) % len(PIECES[fallingPiece['shape']])
                            if not isValidPosition(board, fallingPiece):
                                fallingPiece['rotation'] = (fallingPiece['rotation'] - 1) % len(PIECES[fallingPiece['shape']])
                        elif (event.key == K_q): # rotate the other direction
                            fallingPiece['rotation'] = (fallingPiece['rotation'] - 1) % len(PIECES[fallingPiece['shape']])
                            if not isValidPosition(board, fallingPiece):
                                fallingPiece['rotation'] = (fallingPiece['rotation'] + 1) % len(PIECES[fallingPiece['shape']])

                        # making the piece fall faster with the down key
                        elif (event.key == K_DOWN or event.key == K_s):
                            movingDown = True
                            if isValidPosition(board, fallingPiece, adjY=1):
                                fallingPiece['y'] += 1
                            lastMoveDownTime = time.time()

                        # move the current piece all the way down
                        elif event.key == K_SPACE:
                            movingDown = False
                            movingLeft = False
                            movingRight = False
                            for i in range(1, BOARDHEIGHT):
                                if not isValidPosition(board, fallingPiece, adjY=i):
                                    break
                            fallingPiece['y'] += i - 1

                # handle moving the piece because of user input
                if (movingLeft or movingRight) and time.time() - lastMoveSidewaysTime > MOVESIDEWAYSFREQ:
                    if movingLeft and isValidPosition(board, fallingPiece, adjX=-1):
                        fallingPiece['x'] -= 1
                    elif movingRight and isValidPosition(board, fallingPiece, adjX=1):
                        fallingPiece['x'] += 1
                    lastMoveSidewaysTime = time.time()

                if movingDown and time.time() - lastMoveDownTime > MOVEDOWNFREQ and isValidPosition(board, fallingPiece, adjY=1):
                    fallingPiece['y'] += 1
                    lastMoveDownTime = time.time()

                # let the piece fall if it is time to fall
                if time.time() - lastFallTime > fallFreq:
                    # see if the piece has landed
                    if not isValidPosition(board, fallingPiece, adjY=1):
                        # falling piece has landed, set it on the board
                        addToBoard(board, fallingPiece)
                        score += removeCompleteLines(board)
                        levelTemp = level
                        level, fallFreq = calculateLevelAndFallFreq(score)
                        fallingPiece = None
                        if level == levelTemp + 1:
                            outlet.push_sample(x=[levelGainTetris])
                    else:
                        # piece did not land, just move the piece down
                        fallingPiece['y'] += 1
                        lastFallTime = time.time()

                # drawing everything on the screen
                DISPLAYSURF.fill(BGCOLOR)
                drawBoard(board)
                drawStatus(score, level)
                drawNextPiece(nextPiece)
                if fallingPiece != None:
                    drawPiece(fallingPiece)

                pygame.display.update()
                FPSCLOCK.tick(FPS)

            thisExp.addData("tetrisScore", score)


        def makeTextObjs(text, font, color):
            surf = font.render(text, True, color)
            return surf, surf.get_rect()


        def terminate():
            pygame.quit()
            sys.exit()


        def checkForKeyPress():
            # Go through event queue looking for a KEYUP event.
            # Grab KEYDOWN events to remove them from the event queue.
            checkForQuit()

            for event in pygame.event.get(KEYUP): # get all the KEYUP events
                if event.key == K_SPACE:
                    return 1

            for event in pygame.event.get([KEYDOWN, KEYUP]):
                if event.type == KEYDOWN:
                    continue
                return event.key
            return None


        def showTextScreen(text):
            # This function displays large text in the
            # center of the screen until a key is pressed.
            # Draw the text drop shadow
            titleSurf, titleRect = makeTextObjs(text, BIGFONT, TEXTSHADOWCOLOR)
            titleRect.center = (int(WINDOWWIDTH / 2), int(WINDOWHEIGHT / 2))
            DISPLAYSURF.blit(titleSurf, titleRect)

            # Draw the text
            titleSurf, titleRect = makeTextObjs(text, BIGFONT, TEXTCOLOR)
            titleRect.center = (int(WINDOWWIDTH / 2) - 3, int(WINDOWHEIGHT / 2) - 3)
            DISPLAYSURF.blit(titleSurf, titleRect)

            # Draw the additional "Press a key to play." text.
            pressKeySurf, pressKeyRect = makeTextObjs('Talk to the instructor', BASICFONT, TEXTCOLOR)
            pressKeyRect.center = (int(WINDOWWIDTH / 2), int(WINDOWHEIGHT / 2) + 100)
            DISPLAYSURF.blit(pressKeySurf, pressKeyRect)

            while not (checkForKeyPress() == 1):
                pygame.display.update()
                FPSCLOCK.tick()


        def checkForQuit():
            for event in pygame.event.get(QUIT): # get all the QUIT events
                terminate() # terminate if any QUIT events are present
            for event in pygame.event.get(KEYUP): # get all the KEYUP events
                if event.key == K_BACKSPACE:
                    terminate() # terminate if the KEYUP event was for the Esc key
                pygame.event.post(event) # put the other KEYUP event objects back


        def calculateLevelAndFallFreq(score):
            # Based on the score, return the level the player is on and
            # how many seconds pass until a falling piece falls one space.
            level = int(score / 10) + 1
            fallFreq = 0.3 - (level * 0.02)
            return level, fallFreq

        def getNewPiece():
            # return a random new piece in a random rotation and color
            shape = random.choice(list(PIECES.keys()))
            newPiece = {'shape': shape,
                        'rotation': random.randint(0, len(PIECES[shape]) - 1),
                        'x': int(BOARDWIDTH / 2) - int(TEMPLATEWIDTH / 2),
                        'y': -2, # start it above the board (i.e. less than 0)
                        'color': random.randint(0, len(COLORS)-1)}
            return newPiece


        def addToBoard(board, piece):
            # fill in the board based on piece's location, shape, and rotation
            for x in range(TEMPLATEWIDTH):
                for y in range(TEMPLATEHEIGHT):
                    if PIECES[piece['shape']][piece['rotation']][y][x] != BLANK:
                        board[x + piece['x']][y + piece['y']] = piece['color']


        def getBlankBoard():
            # create and return a new blank board data structure
            board = []
            for i in range(BOARDWIDTH):
                board.append([BLANK] * BOARDHEIGHT)
            return board


        def isOnBoard(x, y):
            return x >= 0 and x < BOARDWIDTH and y < BOARDHEIGHT


        def isValidPosition(board, piece, adjX=0, adjY=0):
            # Return True if the piece is within the board and not colliding
            for x in range(TEMPLATEWIDTH):
                for y in range(TEMPLATEHEIGHT):
                    isAboveBoard = y + piece['y'] + adjY < 0
                    if isAboveBoard or PIECES[piece['shape']][piece['rotation']][y][x] == BLANK:
                        continue
                    if not isOnBoard(x + piece['x'] + adjX, y + piece['y'] + adjY):
                        return False
                    if board[x + piece['x'] + adjX][y + piece['y'] + adjY] != BLANK:
                        return False
            return True

        def isCompleteLine(board, y):
            # Return True if the line filled with boxes with no gaps.
            for x in range(BOARDWIDTH):
                if board[x][y] == BLANK:
                    return False
            return True


        def removeCompleteLines(board):
            # Remove any completed lines on the board, move everything above them down, and return the number of complete lines.
            numLinesRemoved = 0
            y = BOARDHEIGHT - 1 # start y at the bottom of the board
            while y >= 0:
                if isCompleteLine(board, y):
                    # Remove the line and pull boxes down by one line.
                    for pullDownY in range(y, 0, -1):
                        for x in range(BOARDWIDTH):
                            board[x][pullDownY] = board[x][pullDownY-1]
                    # Set very top line to blank.
                    for x in range(BOARDWIDTH):
                        board[x][0] = BLANK
                    numLinesRemoved += 1
                    # Note on the next iteration of the loop, y is the same.
                    # This is so that if the line that was pulled down is also
                    # complete, it will be removed.
                else:
                    y -= 1 # move on to check next row up
            return numLinesRemoved


        def convertToPixelCoords(boxx, boxy):
            # Convert the given xy coordinates of the board to xy
            # coordinates of the location on the screen.
            return (XMARGIN + (boxx * BOXSIZE)), (TOPMARGIN + (boxy * BOXSIZE))


        def drawBox(boxx, boxy, color, pixelx=None, pixely=None):
            # draw a single box (each tetromino piece has four boxes)
            # at xy coordinates on the board. Or, if pixelx & pixely
            # are specified, draw to the pixel coordinates stored in
            # pixelx & pixely (this is used for the "Next" piece).
            if color == BLANK:
                return
            if pixelx == None and pixely == None:
                pixelx, pixely = convertToPixelCoords(boxx, boxy)
            pygame.draw.rect(DISPLAYSURF, COLORS[color], (pixelx + 1, pixely + 1, BOXSIZE - 1, BOXSIZE - 1))
            pygame.draw.rect(DISPLAYSURF, LIGHTCOLORS[color], (pixelx + 1, pixely + 1, BOXSIZE - 4, BOXSIZE - 4))


        def drawBoard(board):
            # draw the border around the board
            pygame.draw.rect(DISPLAYSURF, BORDERCOLOR, (XMARGIN - 3, TOPMARGIN - 7, (BOARDWIDTH * BOXSIZE) + 8, (BOARDHEIGHT * BOXSIZE) + 8), 5)

            # fill the background of the board
            pygame.draw.rect(DISPLAYSURF, BGCOLOR, (XMARGIN, TOPMARGIN, BOXSIZE * BOARDWIDTH, BOXSIZE * BOARDHEIGHT))
            # draw the individual boxes on the board
            for x in range(BOARDWIDTH):
                for y in range(BOARDHEIGHT):
                    drawBox(x, y, board[x][y])


        def drawStatus(score, level):
            # draw the score text
            scoreSurf = BASICFONT.render('Score: %s' % score, True, TEXTCOLOR)
            scoreRect = scoreSurf.get_rect()
            scoreRect.topleft = (WINDOWWIDTH - 150, 20)
            DISPLAYSURF.blit(scoreSurf, scoreRect)

            # draw the level text
            levelSurf = BASICFONT.render('Level: %s' % level, True, TEXTCOLOR)
            levelRect = levelSurf.get_rect()
            levelRect.topleft = (WINDOWWIDTH - 150, 50)
            DISPLAYSURF.blit(levelSurf, levelRect)


        def drawPiece(piece, pixelx=None, pixely=None):
            shapeToDraw = PIECES[piece['shape']][piece['rotation']]
            if pixelx == None and pixely == None:
                # if pixelx & pixely hasn't been specified, use the location stored in the piece data structure
                pixelx, pixely = convertToPixelCoords(piece['x'], piece['y'])

            # draw each of the boxes that make up the piece
            for x in range(TEMPLATEWIDTH):
                for y in range(TEMPLATEHEIGHT):
                    if shapeToDraw[y][x] != BLANK:
                        drawBox(None, None, piece['color'], pixelx + (x * BOXSIZE), pixely + (y * BOXSIZE))


        def drawNextPiece(piece):
            # draw the "next" text
            nextSurf = BASICFONT.render('Next:', True, TEXTCOLOR)
            nextRect = nextSurf.get_rect()
            nextRect.topleft = (WINDOWWIDTH - 120, 80)
            DISPLAYSURF.blit(nextSurf, nextRect)
            # draw the "next" piece
            drawPiece(piece, pixelx=WINDOWWIDTH-120, pixely=100)


        if __name__ == '__main__':
            main()
  Routine Snake
    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Routine:
        """
        Wormy (a Nibbles clone)

        original author: Al Sweigart (al@inventwithpython.com)
        {Making Games with Python and Pygame (2012)}
        http://inventwithpython.com/pygame
        Released under a "Simplified BSD" license

        Tweeked so that it has a specified duration and it can be paused

        Created on Mon Dec  4 17:07:57 2023

        @author: elpid
        """



        import random, pygame, sys
        from pygame.locals import *
        import time

        repetitions = SNAKEREPETITION
        T_BREAK = SNAKESECITONLEENGTH * minuteOrSecond
        outlet.push_sample(x=[startSnake])
        print('startSnake')

        FPS = 15
        WINDOWWIDTH = 640
        WINDOWHEIGHT = 480
        CELLSIZE = 20
        assert WINDOWWIDTH % CELLSIZE == 0, "Window width must be a multiple of cell size."
        assert WINDOWHEIGHT % CELLSIZE == 0, "Window height must be a multiple of cell size."
        CELLWIDTH = int(WINDOWWIDTH / CELLSIZE)
        CELLHEIGHT = int(WINDOWHEIGHT / CELLSIZE)

        #             R    G    B
        WHITE     = (255, 255, 255)
        BLACK     = (  0,   0,   0)
        RED       = (255,   0,   0)
        GREEN     = (  0, 255,   0)
        DARKGREEN = (  0, 155,   0)
        DARKGRAY  = ( 40,  40,  40)
        BGCOLOR = BLACK
        TEXTCOLOR = WHITE

        UP = 'up'
        DOWN = 'down'
        LEFT = 'left'
        RIGHT = 'right'

        HEAD = 0 # syntactic sugar: index of the worm's head

        def main():
            global FPSCLOCK, DISPLAYSURF, BASICFONT, BIGFONT

            pygame.init()
            FPSCLOCK = pygame.time.Clock()
            DISPLAYSURF = pygame.display.set_mode((WINDOWWIDTH, WINDOWHEIGHT))
            BASICFONT = pygame.font.Font('freesansbold.ttf', 18)
            BIGFONT = pygame.font.Font('freesansbold.ttf', 100)
            pygame.display.set_caption('Wormy')

            showStartScreen()
            shouldContinue = True
            breakTime = time.time()
            timeAddition = 0
            loopCounter = 0
            while shouldContinue:
                print(timeAddition)
                shouldContinue, timeAddition, breakTime, loopCounter = runGame(breakTime, timeAddition, loopCounter)
            showGameOverScreen()


        def runGame(breakTime, timeAddition, loopCounter):
            # Set a random start point.
            startx = 0 #random.randint(5, CELLWIDTH - 6)
            starty = 0 #random.randint(5, CELLHEIGHT - 6)
            wormCoords = [{'x': startx,     'y': starty},
                          {'x': startx - 1, 'y': starty},
                          {'x': startx - 2, 'y': starty}]
            direction = RIGHT

            # Start the apple in a random place.
            apple = getRandomLocation()


            while not loopCounter == repetitions: # main game loop

                if time.time() >  breakTime + T_BREAK:
                    timeAdditionStart = time.time()
                    outlet.push_sample(x=[pauseSnake])
                    print('pauseSnake')
                    showTextScreen('Paused')
                    loopCounter = loopCounter + 1
                    timeAdditionFinish = time.time()
                    timeAddition = timeAddition + (timeAdditionFinish - timeAdditionStart)
                    breakTime = time.time()
                    outlet.push_sample(x=[startSnake])
                    print('startSnake')



                for event in pygame.event.get(): # event handling loop
                    if event.type == QUIT:
                        terminate()
                    elif event.type == KEYDOWN:
                        if (event.key == K_LEFT or event.key == K_a) and direction != RIGHT:
                            direction = LEFT
                        elif (event.key == K_RIGHT or event.key == K_d) and direction != LEFT:
                            direction = RIGHT
                        elif (event.key == K_UP or event.key == K_w) and direction != DOWN:
                            direction = UP
                        elif (event.key == K_DOWN or event.key == K_s) and direction != UP:
                            direction = DOWN
                        elif event.key == K_ESCAPE:
                            terminate()
                    elif event.type == KEYUP:
                        if (event.key == K_p):
                            # Pausing the game
                            showTextScreen('Paused') # pause until a key press


                # check if the worm has hit itself or the edge
                if wormCoords[HEAD]['x'] == -1 or wormCoords[HEAD]['x'] == CELLWIDTH or wormCoords[HEAD]['y'] == -1 or wormCoords[HEAD]['y'] == CELLHEIGHT:
                    outlet.push_sample(x=[snakeFail])
                    print('snakeFail')
                    return True, timeAddition, breakTime, loopCounter# game over
                for wormBody in wormCoords[1:]:
                    if wormBody['x'] == wormCoords[HEAD]['x'] and wormBody['y'] == wormCoords[HEAD]['y']:
                        outlet.push_sample(x=[snakeFail])
                        print('snakeFail')
                        return True, timeAddition, breakTime, loopCounter# game over

                # check if worm has eaten an apply
                if wormCoords[HEAD]['x'] == apple['x'] and wormCoords[HEAD]['y'] == apple['y']:
                    # don't remove worm's tail segment
                    outlet.push_sample(x=[snakeLvlUp])
                    print('snakeLvlUp')
                    apple = getRandomLocation() # set a new apple somewhere
                else:
                    del wormCoords[-1] # remove worm's tail segment

                # move the worm by adding a segment in the direction it is moving
                if direction == UP:
                    newHead = {'x': wormCoords[HEAD]['x'], 'y': wormCoords[HEAD]['y'] - 1}
                elif direction == DOWN:
                    newHead = {'x': wormCoords[HEAD]['x'], 'y': wormCoords[HEAD]['y'] + 1}
                elif direction == LEFT:
                    newHead = {'x': wormCoords[HEAD]['x'] - 1, 'y': wormCoords[HEAD]['y']}
                elif direction == RIGHT:
                    newHead = {'x': wormCoords[HEAD]['x'] + 1, 'y': wormCoords[HEAD]['y']}
                wormCoords.insert(0, newHead)
                DISPLAYSURF.fill(BGCOLOR)
                drawGrid()
                drawWorm(wormCoords)
                drawApple(apple)
                drawScore(len(wormCoords) - 3)
                pygame.display.update()
                FPSCLOCK.tick(FPS)
                nowTime = time.time()
            return False, timeAddition, breakTime, loopCounter

        def drawPressKeyMsg():
            pressKeySurf = BASICFONT.render('Press a key to play.', True, DARKGRAY)
            pressKeyRect = pressKeySurf.get_rect()
            pressKeyRect.topleft = (WINDOWWIDTH - 200, WINDOWHEIGHT - 30)
            DISPLAYSURF.blit(pressKeySurf, pressKeyRect)


        def checkForKeyPress():
            if len(pygame.event.get(QUIT)) > 0:
                terminate()

            keyUpEvents = pygame.event.get(KEYUP)


            for event in keyUpEvents: # get all the KEYUP events
                if event.key == K_SPACE:
                    return 1
            if len(keyUpEvents) == 0:
                return None
            if keyUpEvents[0].key == K_ESCAPE:
                terminate()
            return keyUpEvents[0].key


        def showStartScreen():
            titleFont = pygame.font.Font('freesansbold.ttf', 100)
            titleSurf1 = titleFont.render('Wormy!', True, WHITE, DARKGREEN)
            titleSurf2 = titleFont.render('Wormy!', True, GREEN)

            degrees1 = 0
            degrees2 = 0
            while True:
                DISPLAYSURF.fill(BGCOLOR)
                rotatedSurf1 = pygame.transform.rotate(titleSurf1, degrees1)
                rotatedRect1 = rotatedSurf1.get_rect()
                rotatedRect1.center = (WINDOWWIDTH / 2, WINDOWHEIGHT / 2)
                DISPLAYSURF.blit(rotatedSurf1, rotatedRect1)

                rotatedSurf2 = pygame.transform.rotate(titleSurf2, degrees2)
                rotatedRect2 = rotatedSurf2.get_rect()
                rotatedRect2.center = (WINDOWWIDTH / 2, WINDOWHEIGHT / 2)
                DISPLAYSURF.blit(rotatedSurf2, rotatedRect2)

                drawPressKeyMsg()

                if checkForKeyPress():
                    pygame.event.get() # clear event queue
                    return
                pygame.display.update()
                FPSCLOCK.tick(FPS)
                degrees1 += 3 # rotate by 3 degrees each frame
                degrees2 += 7 # rotate by 7 degrees each frame


        def terminate():
            pygame.quit()
            sys.exit()


        def getRandomLocation():
            return {'x': random.randint(0, CELLWIDTH - 1), 'y': random.randint(0, CELLHEIGHT - 1)}


        def showGameOverScreen():
            gameOverFont = pygame.font.Font('freesansbold.ttf', 150)
            gameSurf = gameOverFont.render('Game', True, WHITE)
            overSurf = gameOverFont.render('Over', True, WHITE)
            gameRect = gameSurf.get_rect()
            overRect = overSurf.get_rect()
            gameRect.midtop = (WINDOWWIDTH / 2, 10)
            overRect.midtop = (WINDOWWIDTH / 2, gameRect.height + 10 + 25)

            DISPLAYSURF.blit(gameSurf, gameRect)
            DISPLAYSURF.blit(overSurf, overRect)
            drawPressKeyMsg()
            pygame.display.update()
            pygame.time.wait(500)
            checkForKeyPress() # clear out any key presses in the event queue

            while True:
                if checkForKeyPress():
                    pygame.event.get() # clear event queue
                    return

        def drawScore(score):
            scoreSurf = BASICFONT.render('Score: %s' % (score), True, WHITE)
            scoreRect = scoreSurf.get_rect()
            scoreRect.topleft = (WINDOWWIDTH - 120, 10)
            DISPLAYSURF.blit(scoreSurf, scoreRect)


        def drawWorm(wormCoords):
            for coord in wormCoords:
                x = coord['x'] * CELLSIZE
                y = coord['y'] * CELLSIZE
                wormSegmentRect = pygame.Rect(x, y, CELLSIZE, CELLSIZE)
                pygame.draw.rect(DISPLAYSURF, DARKGREEN, wormSegmentRect)
                wormInnerSegmentRect = pygame.Rect(x + 4, y + 4, CELLSIZE - 8, CELLSIZE - 8)
                pygame.draw.rect(DISPLAYSURF, GREEN, wormInnerSegmentRect)


        def drawApple(coord):
            x = coord['x'] * CELLSIZE
            y = coord['y'] * CELLSIZE
            appleRect = pygame.Rect(x, y, CELLSIZE, CELLSIZE)
            pygame.draw.rect(DISPLAYSURF, RED, appleRect)


        def drawGrid():
            for x in range(0, WINDOWWIDTH, CELLSIZE): # draw vertical lines
                pygame.draw.line(DISPLAYSURF, DARKGRAY, (x, 0), (x, WINDOWHEIGHT))
            for y in range(0, WINDOWHEIGHT, CELLSIZE): # draw horizontal lines
                pygame.draw.line(DISPLAYSURF, DARKGRAY, (0, y), (WINDOWWIDTH, y))


        def makeTextObjs(text, font, color):
            surf = font.render(text, True, color)
            return surf, surf.get_rect()


        def showTextScreen(text):
            # This function displays large text in the
            # center of the screen until a key is pressed.

            # Draw the text
            titleSurf, titleRect = makeTextObjs(text, BIGFONT, TEXTCOLOR)
            titleRect.center = (int(WINDOWWIDTH / 2) - 3, int(WINDOWHEIGHT / 2) - 3)
            DISPLAYSURF.blit(titleSurf, titleRect)

            # Draw the additional "Press a key to play." text.
            pressKeySurf, pressKeyRect = makeTextObjs('Press space to continue.', BASICFONT, TEXTCOLOR)
            pressKeyRect.center = (int(WINDOWWIDTH / 2), int(WINDOWHEIGHT / 2) + 100)
            DISPLAYSURF.blit(pressKeySurf, pressKeyRect)

            while not (checkForKeyPress() == 1):
                pygame.display.update()
                FPSCLOCK.tick()


        if __name__ == '__main__':
            main()
  Routine ISI
    CodeComponent ISIcode
      Code Type = Py
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      Begin Routine:
        # All the durations are in seconds
        # Random ISI between 1 and 4.
        minISI = 1
        maxISI = 4

        # Task duration
        length_of_task = 10 * minuteOrSecond

        # Feedback duration
        feed = 0.5

        # A timer
        timing = core.Clock()
        # ISI is then set each routine
        randISI = random.randint(0,maxISI - minISI) + minISI

        overall_timer = core.Clock()

        # A message when participant miss
        message = 'You did not hit the button!'

        # Adding the ISI so it is saved in the datafile
        thisExp.addData('ISI', randISI)
      Each Frame:
        keys = dontrespond.getKeys(keyList=['space'], waitRelease=False)
        keys = [key.name for key in keys]

        # Append True to list if a key is pressed, clear list if not
        if "space" in keys:
             message = 'Too soon!'
             continueRoutine = False
    TextComponent ISI_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $randISI
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    KeyboardComponent dontrespond
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $randISI-1
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  Routine Target
    CodeComponent Target_code
      Code Type = Py
      Begin Routine:
        print('pvtItemAppears')
        outlet.push_sample(x=[pvtItemAppears])
        # Reset the timer
        timing.reset()

        # Check for response
        if message == 'Too soon!':
            # Adding 0 to Accuracy and missing to RTms
            thisExp.addData('Accuracy', 0)
            thisExp.addData('RTms', np.NAN)
            # End the Routine to continue next trial
            continueRoutine = False
      Each Frame:
        # counter in seconds
        time = int(round(timing.getTime(), 3) * 1000)


        # PsychoPy is not running the trial for more than 29.991...
        if timing.getTime() >= 4.99:
                message = 'No response!'
                Response.rt = timing.getTime()
                thisExp.addData('RTms', np.NAN)
                thisExp.addData('Accuracy', 0)
                continueRoutine = False
      End Routine:
        if type(Response.rt) is float:
            message = str(round(Response.rt * 1000))
            thisExp.addData('Accuracy', 1)
            thisExp.addData('RTms', Response.rt * 1000)
    TextComponent Targetstim
      color = red
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text [set every frame] = $time
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    KeyboardComponent Response
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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  Routine Feedback
    TextComponent Feedback_text
      color = green
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $feed
      text [set every repeat] = $message
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  Routine End_task
    CodeComponent End_task_2
      Code Type = Py
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      End Routine:
        import time
        # Get the time in the task
        time_in_task = overall_timer.getTime()
        nowtime = time.time()

        # If time_in_task corresponds to the duration we set previously we end te task
        print(nowtime, pvtStarter, pvtSectionLength)
        if nowtime > pvtStarter + pvtSectionLength:
            currentLoop.finished = True
            continueRoutine = False
  Routine Maths_Intro
    TextComponent text_6
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Maths task: you will be presented a simple equation that you need to solve.
        - You cannot advance if you give an incorrect answer.
        - Solve as much equations as you can in 2 minutes.

        Press space to continue
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_8
      Code Type = Auto->JS
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      Begin Routine:
        import time
      End Routine:
        mathStarter = time.time()
        mathSectionLength = MATHSECTIONLENGTH  * minuteOrSecond
        print('startMaths')
        outlet.push_sample(x=[startMaths])
  Routine MathsNumGeneration
    CodeComponent code_5
      Code Type = Auto->JS
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      Before Experiment:
        import random
      Begin Routine:
        answer = 0
        while not (len(str(answer)) == 2 and answer > 0):
            numberOne = random.randint(1,99)
            numberTwo = random.randint(1,99)
            operator = random.randint(0,3)
            operatorString = ""

            if operator == 0:
                operatorString = "+"
                answer = numberOne + numberTwo

            elif operator == 1:
                operatorString = "-"
                answer = numberOne - numberTwo

            elif operator == 2:
                operatorString = "*"
                answer = numberOne * numberTwo

            elif operator == 3:
                operatorString = "/"
                answer = numberOne / numberTwo

            displayText = str(numberOne) + " " + operatorString + " " + str(numberTwo)
  Routine MathsTask
    TextComponent text_8
      letterHeight = 0.05
      pos = (100, 100)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_3
      allowedKeys = '0','1','2','3','4','5','6','7','8','9'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = all keys
      storeCorrect = True
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    CodeComponent code_6
      Code Type = Auto->JS
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      Begin Routine:
        proposed = ""
        proposedInt = 0
      Each Frame:
        keys = key_resp_3.getKeys(['0','1','2','3','4','5','6','7','8','9'], waitRelease=True)

        for key in keys:
            proposed = proposed + str(key.name)
            text_8.text=key.name

        if len(proposed) == 2:
            proposedInt = int(proposed)
            if proposedInt == answer:
                print("break routine idk how")
            else:
                text_8.text="Incorrect, try again"
                proposed = ""
    TextComponent text_9
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $displayText
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  Routine mathsTaskNew
    CodeComponent code_7
      Code Type = Auto->JS
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      Begin Routine:
        import time
        proposed = ""
        proposedInt = 0
        failCounter = 0
      Each Frame:
        nowtime = time.time()
        msg = ""

        if nowtime > mathStarter + mathSectionLength:
            text_7.text = "time is up"
            continueRoutine = False
            currentLoop.finished = True
            msg = "time is up"

        keys = key_resp_4.getKeys(['num_1','num_2','num_3','num_4','num_5','num_6','num_7','num_8','num_9','num_0', '0','1','2','3','4','5','6','7','8','9'], waitRelease=True)

        for key in keys:
            proposed = proposed + str(key.name).replace('num_', '')
            text_7.text=str(key.name).replace('num_', '')

        if len(proposed) == 2:
            proposedInt = int(proposed)
            if proposedInt == answer:
                text_7.text=proposed
                time.sleep(0.25)
                continueRoutine = False
            else:
                print('inCorrectAnswer')
                outlet.push_sample(x=[inCorrectAnswer])
                text_7.text=proposed
                time.sleep(0.25)
                text_7.text=displayText
                proposed = ""
      End Routine:
        text_7.text = "time is up"
        if not msg == "time is up":
            print('correctAnswer')
            outlet.push_sample(x=[correctAnswer])
    KeyboardComponent key_resp_4
      allowedKeys = 'num_1', 'num_2','num_3','num_4','num_5','num_6','num_7','num_8','num_9','num_0', '0','1','2','3','4','5','6','7','8','9'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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    TextComponent text_7
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $displayText
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  Routine InstructionsPVT
    TextComponent InstructionsText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        In this task, you are to press the SPACEBAR as quick as possible after a red counter appears
        on screen.


        Start the task by pressing the  SPACEBAR.
    KeyboardComponent InstrucKey
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_9
      Code Type = Auto->JS
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      End Routine:
        pvtSectionLength = PVTSECTIONLENGTH * minuteOrSecond
        pvtStarter = time.time()
        print('startPvt')
        outlet.push_sample(x=[startPvt])
  Routine Fatigue_Assessment_Inventory
    TextComponent text_5
      letterHeight = 0.05
      pos = (0, 0.25)
      startVal [time (s)] = 0.0
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    CodeComponent code_10
      Code Type = Auto->JS
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      Begin Experiment:
        fatigueAssessmentInventoryString = ''
        fatigueAssessmentInventoryCounter = 0
        questionAmount = 29
      Begin Routine:
        fatigueAssessmentInventoryCounter = fatigueAssessmentInventoryCounter + 1

        if fatigueAssessmentInventoryCounter == 1:
            text_5.text = "I feel drowsy when I am fatigued"
        elif fatigueAssessmentInventoryCounter == 2:
            text_5.text = "When I am fatigued, I lose my patience"
        elif fatigueAssessmentInventoryCounter == 3:
            text_5.text = "My motivation is lower when I am fatigued"
        elif fatigueAssessmentInventoryCounter == 4:
            text_5.text = "When I am fatigued, I have difficulty concentrating"
        elif fatigueAssessmentInventoryCounter == 5:
            text_5.text = "Exercise brings on my fatigue"
        elif fatigueAssessmentInventoryCounter == 6:
            text_5.text = "Heat brings on my fatigue"
        elif fatigueAssessmentInventoryCounter == 7:
            text_5.text = "Long periods of inactivity bring on my fatigue"
        elif fatigueAssessmentInventoryCounter == 8:
            text_5.text = "Stress brings on my fatigue"
        elif fatigueAssessmentInventoryCounter == 9:
            text_5.text = "Depression brings on my fatigue"
        elif fatigueAssessmentInventoryCounter == 10:
            text_5.text = "Work brings on my fatigue"
        elif fatigueAssessmentInventoryCounter == 11:
            text_5.text = "My fatigue is worse in the afternoon"
        elif fatigueAssessmentInventoryCounter == 12:
            text_5.text = "My fatigue is worse in the morning"
        elif fatigueAssessmentInventoryCounter == 13:
            text_5.text = "Performance of routine daily activities increases my fatigue"
        elif fatigueAssessmentInventoryCounter == 14:
            text_5.text = "Resting lessens my fatigue"
        elif fatigueAssessmentInventoryCounter == 15:
            text_5.text = "Sleeping lessens my fatigue"
        elif fatigueAssessmentInventoryCounter == 16:
            text_5.text = "Cool temperatures lessen my fatiuge"
        elif fatigueAssessmentInventoryCounter == 17:
            text_5.text = "Positive experiences lessen my fatigue"
        elif fatigueAssessmentInventoryCounter == 18:
            text_5.text = "I am easily fatigued"
        elif fatigueAssessmentInventoryCounter == 19:
            text_5.text = "Fatigue interferes with my physical functioning"
        elif fatigueAssessmentInventoryCounter == 20:
            text_5.text = "Fatiuge causes frequent problems for me"
        elif fatigueAssessmentInventoryCounter == 21:
            text_5.text = "My fatigue prevents sustained physical functioning"
        elif fatigueAssessmentInventoryCounter == 22:
            text_5.text = "Fatigues interferes with carrying out certain duties and responsibilities"
        elif fatigueAssessmentInventoryCounter == 23:
            text_5.text = "Fatiuge predated other symptoms of my condition"
        elif fatigueAssessmentInventoryCounter == 24:
            text_5.text = "Fatigue is my most disabling symptom"
        elif fatigueAssessmentInventoryCounter == 25:
            text_5.text = "Fatiuge is among my 3 most disabling symptoms"
        elif fatigueAssessmentInventoryCounter == 26:
            text_5.text = "Fatigue interferes with my work, family or social life"
        elif fatigueAssessmentInventoryCounter == 27:
            text_5.text = "Fatigue makes other symptoms worse"
        elif fatigueAssessmentInventoryCounter == 28:
            text_5.text = "Fatigue that i now experience is different in quality or severity than the fatigue i experienced before i developed this condition"
        elif fatigueAssessmentInventoryCounter == 29:
            text_5.text = "I experienced prolonged fatigue after exercise"
    SliderComponent slider
      forceEndRoutine = True
      granularity = 1
      initVal = 4
      labels = ("Disagree: " + str(1), 2, 3, 4, 5, 6, "Agree: " + str(7))
      letterHeight = 0.03
      pos = (0,-0.1)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6, 7)
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  Routine Stanford_sleepiness_scale
    TextComponent text_10
      letterHeight = 0.05
      pos = (0, 0.25)
      startVal [time (s)] = 0.0
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    CodeComponent code_11
      Code Type = Auto->JS
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      Begin Experiment:
        fatigueAssessmentInventoryString = ''
        fatigueAssessmentInventoryCounter = 0
        questionAmount = 29
      Begin Routine:
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    SliderComponent slider_2
      forceEndRoutine = True
      granularity = 1
      initVal = 4
      labels = ("Disagree: " + str(1), 2, 3, 4, 5, 6, "Agree: " + str(7))
      letterHeight = 0.03
      pos = (0,-0.1)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6, 7)
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  Routine VAS_F
    TextComponent text_11
      letterHeight = 0.05
      pos = (0, 0.25)
      startVal [time (s)] = 0.0
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    CodeComponent code_12
      Code Type = Auto->JS
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      Begin Experiment:
        fatigueAssessmentInventoryString = ''
        fatigueAssessmentInventoryCounter = 0
        questionAmount = 18
      Begin Routine:
        fatigueAssessmentInventoryCounter = fatigueAssessmentInventoryCounter + 1
        word = ""

        if fatigueAssessmentInventoryCounter == 1:
            word = "tired"
        elif fatigueAssessmentInventoryCounter == 2:
            word = "sleepy"
        elif fatigueAssessmentInventoryCounter == 3:
            word = "drowsy"
        elif fatigueAssessmentInventoryCounter == 4:
            word = "fatigued"
        elif fatigueAssessmentInventoryCounter == 5:
            word = "worn out"
        elif fatigueAssessmentInventoryCounter == 6:
            word = "energetic"
        elif fatigueAssessmentInventoryCounter == 7:
            word = "active"
        elif fatigueAssessmentInventoryCounter == 8:
            word = "vigorous"
        elif fatigueAssessmentInventoryCounter == 9:
            word = "efficient"
        elif fatigueAssessmentInventoryCounter == 10:
            word = "lively"
        elif fatigueAssessmentInventoryCounter == 11:
            word = "bushed"
        elif fatigueAssessmentInventoryCounter == 12:
            word = "exhausted"
        elif fatigueAssessmentInventoryCounter == 13:
            word = "easy to keep my eyes open"
        elif fatigueAssessmentInventoryCounter == 14:
            word = "easy to move my body"
        elif fatigueAssessmentInventoryCounter == 15:
            word = "easy to concentrate"
        elif fatigueAssessmentInventoryCounter == 16:
            word = "easy to talk"
        elif fatigueAssessmentInventoryCounter == 17:
            word = "desired to close my eyes"
        elif fatigueAssessmentInventoryCounter == 18:
            word = "desired to lie down"
        slider_3.labe = ("not " + word + str(1), 2, 3, 4, 5, 6, 7, 8, 9,  "Very" + word + str(10))
    SliderComponent slider_3
      forceEndRoutine = True
      granularity = 1
      initVal = 4
      labels = ("not at all: " + str(1), 2, 3, 4, 5, 6, 7, 8, 9,  "Very" + str(10))
      letterHeight = 0.03
      pos = (0,-0.1)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6, 7, 8, 9, 10)
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  Routine Self_evaluation
    TextComponent text_12
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Self evaluation, press space when done
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    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine PVT1Finish
  Routine NasaTLX
    TextComponent text_13
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Please fill the nasa tlx test.

        Press space to continue
    KeyboardComponent key_resp_6
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine MathEnd
    TextComponent text_14
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Press space to continue
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    KeyboardComponent key_resp_7
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine Starter
  Routine InstructionsPVT
  LoopInitiator trials loopType="TrialHandler"
    loopType = sequential
    nReps = 99
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    Routine ISI
    Routine Target
    Routine Feedback
    Routine End_task
  LoopTerminator trials
  Routine Maths_Intro
  LoopInitiator trials_3 loopType="TrialHandler"
    loopType = sequential
    nReps = 99
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    Routine MathsNumGeneration
    Routine mathsTaskNew
  LoopTerminator trials_3
  Routine MathEnd
  Routine Tetris
  Routine NasaTLX
  Routine InstructionsPVT
  LoopInitiator trials_6 loopType="TrialHandler"
    loopType = sequential
    nReps = 99
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    Routine ISI
    Routine Target
    Routine Feedback
    Routine End_task
  LoopTerminator trials_6
  Routine Maths_Intro
  LoopInitiator trials_5 loopType="TrialHandler"
    loopType = random
    nReps = 99
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    Routine MathsNumGeneration
    Routine mathsTaskNew
  LoopTerminator trials_5
  Routine MathEnd
  Routine Snake
  Routine NasaTLX
  Routine InstructionsPVT
  LoopInitiator trials_4 loopType="TrialHandler"
    loopType = random
    nReps = 99
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    Routine ISI
    Routine Target
    Routine Feedback
    Routine End_task
  LoopTerminator trials_4
  Routine Maths_Intro
  LoopInitiator trials_2 loopType="TrialHandler"
    loopType = random
    nReps = 99
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    Routine MathsNumGeneration
    Routine mathsTaskNew
  LoopTerminator trials_2
  Routine Ender
