PsychoPy2experiment version="2022.2.5"
Settings
  Audio lib = sounddevice
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [920, 780]
  expName = Oddball_task
  keyboardBackend = ioHub
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Routines
  Routine Instructions
    TextComponent instructions
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = In this task you will be required to categorise the presented stimuli depending on the tone. Count the odd tone. Press 'space' to continue. Press 'esc' to exit the experiment.
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    KeyboardComponent key_resp_1
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Py
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      Before Experiment:
        from pylsl import StreamInfo, StreamOutlet
        import time
      Begin Experiment:
        #event ids
        startStandard = 1
        startTarget = 2

        info = StreamInfo(name='LSL_Markers', type='Markers', channel_count=1,
                          channel_format='int32', source_id='Psychopy Markers')
        # Initialize the stream.
        outlet = StreamOutlet(info)
  Routine Trial
    TextComponent fixation
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = +
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    SoundComponent sound_1
      sound [set every repeat] = $tone
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.5
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        if corrAns == "t":
            outlet.push_sample(x=[startTarget])
        else:
            outlet.push_sample(x=[startStandard])
  Routine Instructions_2
    TextComponent instructions_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Got it? Press 'space' to continue.
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine End
    TextComponent thank_you
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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      text:
        This is the end of the experiment.

        Thank you for your time.
    KeyboardComponent exit_exp
      allowedKeys = 'e'
      forceEndRoutine = True
      startVal [time (s)] = 3
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Flow
  Routine Instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = aud_conditions.xlsx
    loopType = fullRandom
    nReps = 1
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    conditions:
      [{'trial': 'standard', 'file': "soundFiles/1000Hz_-3dBFS_3s_44.1kHz.wav'", 'corrAns': 'None', 'tone': 1000},
      {'trial': 'standard', 'file': "soundFiles/1000Hz_-3dBFS_3s_44.1kHz.wav'", 'corrAns': 'None', 'tone': 1000},
      {'trial': 'standard', 'file': "soundFiles/1000Hz_-3dBFS_3s_44.1kHz.wav'", 'corrAns': 'None', 'tone': 1000},
      {'trial': 'target', 'file': "soundFiles/1200Hz_-3dBFS_3s_44.1kHz.wav'", 'corrAns': 't', 'tone': 1200}]
    Routine Trial
  LoopTerminator trials
  Routine Instructions_2
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = aud_conditions.xlsx
    loopType = fullRandom
    nReps = 1
    random seed = 42
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    conditions:
      [{'trial': 'standard', 'file': "soundFiles/1000Hz_-3dBFS_3s_44.1kHz.wav'", 'corrAns': 'None', 'tone': 1000},
      {'trial': 'standard', 'file': "soundFiles/1000Hz_-3dBFS_3s_44.1kHz.wav'", 'corrAns': 'None', 'tone': 1000},
      {'trial': 'standard', 'file': "soundFiles/1000Hz_-3dBFS_3s_44.1kHz.wav'", 'corrAns': 'None', 'tone': 1000},
      {'trial': 'target', 'file': "soundFiles/1200Hz_-3dBFS_3s_44.1kHz.wav'", 'corrAns': 't', 'tone': 1200},
      {'trial': 'standard', 'file': "soundFiles/1000Hz_-3dBFS_3s_44.1kHz.wav'", 'corrAns': 'None', 'tone': 1000},
      {'trial': 'standard', 'file': "soundFiles/1000Hz_-3dBFS_3s_44.1kHz.wav'", 'corrAns': 'None', 'tone': 1000}]
    Routine Trial
  LoopTerminator trials_2
  Routine End
