PsychoPy2experiment version="2022.2.5"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [936, 864]
  expName = test
  keyboardBackend = ioHub
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Routines
  Routine Intro
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1000
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      text:
        Welcome to the experiment.
        Participant: Sit upright, try to relax, and please avoid during data collection:
        - unnecessary movements
        - talking

        Tester:
        - set volume to 30
        - do impedance and railing checks
        - on labrecorder set: study root, block/task, run, participant, session
        - gather both streams and start labrecorder recording

        press space to continue
    CodeComponent code
      Code Type = Auto->JS
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      Before Experiment:
        from pylsl import StreamInfo, StreamOutlet
        import time
      Begin Experiment:
        #event ids
        startRest = 0
        endRest = 1
        StartASSR = 2
        endASSR = 3
        artifact = 4

        info = StreamInfo(name='LSL_Markers', type='Markers', channel_count=1,
                          channel_format='int32', source_id='Psychopy Markers')
        # Initialize the stream.
        outlet = StreamOutlet(info)
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine ASSR
    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (s)] = 9
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      text:
        A cross will appear, focus on that. You will hear a tone.

        30 s rest
        30 s tone
    SoundComponent ModulatedTone
      sound = 1kHzAmplitudeModulated40Hz.wav
      startVal [time (s)] = 40
      stopVal [duration (s)] = 30
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    PolygonComponent Cross
      fillColor = white
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 9
      stopVal [duration (s)] = 61
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    CodeComponent code_2
      Code Type = Py
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      Begin Routine:
        flag_rest_start = True
        flag_rest_end = True
        flag_ASSR_start = True
        flag_ASSR_end = True
      Each Frame:
        if ModulatedTone.status == STARTED and flag_ASSR_start == True:
            print('ASSR start')
            flag_ASSR_start = False
            outlet.push_sample(x=[startASSR])

        if ModulatedTone.status == FINISHED and flag_ASSR_end == True:
            print('ASSR end')
            flag_ASSR_end = False
            outlet.push_sample(x=[endASSR])

        if text_3.status == STARTED and flag_rest_start == True:
            print('Rest start')
            flag_rest_start = False
            outlet.push_sample(x=[startRest])

        if text_3.status == FINISHED and flag_rest_end == True:
            print('Rest end')
            flag_rest_end = False
            outlet.push_sample(x=[endRest])

            print('****')
    TextComponent text_3
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 9
      stopVal [duration (s)] = 30
      text = Rest, chill a bit
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  Routine Outro
    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1000.0
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      text:
        This section is over. Todo:

        - upload collected data to drive
        - upload device config file to drive
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine Intro
  LoopInitiator trials loopType="TrialHandler"
    loopType = sequential
    nReps = 3
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    Routine ASSR
  LoopTerminator trials
  Routine Outro
