PsychoPy2experiment version="2022.2.5"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  color = black
  expName = PVT
  keyboardBackend = ioHub
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Routines
  Routine Instructions
    TextComponent InstructionsText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome!


        In this task, you are to press the SPACEBAR as quick as possible after a red counter appears
        on screen.


        Start the task by pressing the  SPACEBAR.
    KeyboardComponent InstrucKey
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine ISI
    CodeComponent ISIcode
      Code Type = Py
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      Begin Experiment:
        # All the durations are in seconds
        # Random ISI between 1 and 4.
        minISI = 1
        maxISI = 4

        # Task duration
        length_of_task = 180

        # Feedback duration
        feed = 0.5

        # A timer
        timing = core.Clock()

        # Loading the beep sound
        warning_beep = sound.Sound('beep.wav')
      Begin Routine:
        # ISI is then set each routine
        randISI = random() * (maxISI - minISI) + minISI

        # If it is the first trial
        if PVT_Trials.thisN == 0:
            overall_timer = core.Clock()
            realISI = 0

        if PVT_Trials.thisN > 0:
            # We count the duration of the feedback as part of the ISI
            realISI = feed

        # A message when participant miss
        message = 'You did not hit the button!'

        # Adding the ISI so it is saved in the datafile
        thisExp.addData('ISI', randISI)
      Each Frame:
        keys = dontrespond.getKeys(keyList=['space'], waitRelease=False)
        keys = [key.name for key in keys]

        # Append True to list if a key is pressed, clear list if not
        if "space" in keys:
             message = "Too soon!"
             continueRoutine = False
    TextComponent ISI_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $randISI-realISI
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    KeyboardComponent dontrespond
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $randISI-1
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  Routine Target
    CodeComponent Target_code
      Code Type = Py
      Begin Routine:
        # Reset the timer
        timing.reset()

        # Check for response
        if message == 'Too soon!':
            # Adding 0 to Accuracy and missing to RTms
            thisExp.addData('Accuracy', 0)
            thisExp.addData('RTms', np.NAN)
            # End the Routine to continue next trial
            continueRoutine = False
      Each Frame:
        # counter in seconds
        time = int(round(timing.getTime(), 3) * 1000)
      End Routine:
        if type(Response.rt) is float:
            message = str(round(Response.rt * 1000))
            thisExp.addData('Accuracy', 1)
            thisExp.addData('RTms', Response.rt * 1000)

        # PsychoPy is not running the trial for more than 29.991...
        if timing.getTime() >= 29.99:
                message = 'No response!'
                warning_beep.play()
                Response.rt = timing.getTime()
                thisExp.addData('RTms', np.NAN)
                thisExp.addData('Accuracy', 0)
                continueRoutine = False
    TextComponent Targetstim
      color = red
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
      text [set every frame] = $time
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    KeyboardComponent Response
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
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  Routine Feedback
    TextComponent Feedback_text
      color = red
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $feed
      text [set every repeat] = $message
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  Routine End_task
    CodeComponent End_task_2
      Code Type = Py
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      End Routine:
        # Get the time in the task
        time_in_task = overall_timer.getTime()

        # If time_in_task corresponds to the duration we set previously we end te task
        if time_in_task >= length_of_task:
            continueRoutine = False
            PVT_Trials.finished = True
  Routine The_end
    TextComponent Goodbye
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Thanks you for your participation

        Press the SPACE key to end the task
    KeyboardComponent GoodbyeEnd
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine Instructions
  LoopInitiator PVT_Trials loopType="TrialHandler"
    loopType = random
    nReps = 120
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    Routine ISI
    Routine Target
    Routine Feedback
    Routine End_task
  LoopTerminator PVT_Trials
  Routine The_end
